'' LPM.cr1 -- CR1000 program for Laser Precipitation Monitor at Fairbanks ARM test site
'' 20180501.51 Ken.Irving@alaska.edu

ConstTable
    '' instrument make and model:
    const LPM_NAME  = "Laser Precipitation Monitor"
    const LPM_MODEL = "5.4110.11.100"

    '' instrument operational settings:
    const LPM_ID = 0
    const LPM__COMMPORT = Com1      ' Com1 uses C1=Tx, C2=Rx
    const LPM_DO1__P = 1
    const LPM_DO2__P = 2
    const LPM_0_PRECIP_HRS = 24
    const MAX_TM5_RETRIES = 3
endConstTable

'' some useful ascii character codes:
const ETX = chr(3)
const CR = chr(13)
const SEMICOLON = chr(59)

public battery      : units battery = volts 
public panelTemp    : units panelTemp = deg C
public progSig as Long

dim TM5_raw as string * 2233
public TM5_checksum as boolean      ' true if TM5_raw checksum is good
public TM5_bytes as long
public TM5_retries as long
public TM5_timer as long        : units TM5_timer = sec
dim LPM(525) as string
alias LPM(5)   = LPM_code5m
alias LPM(15)  = LPM_precipAmount

'' LPM error and warning flags:
public LPM_errors as long
public LPM_warnings as long
dim LPM_error(6) as string * 40
dim LPM_warning(9) as string * 40
dim FM_raw as string * 80
dim LPM_err_count(15) as long
dim got_error_counts as boolean 

'' LPM diagnostic analog data from DD[1..13] or LPM[38..50]
public T_interior   : units T_interior   = degC ' 1: "interior temp [degC]"
public T_laserdrvr  : units T_laserdrvr  = degC ' 2: "temp of laser driver 0-80 degC"
public I_laser      : units I_laser      = mA   ' 3: "mean value laser current [1/100 mA]"
public V_control    : units V_control    = mV   ' 4: "control voltage [mV] ref value:  ' 4010+/-5"
public V_optical    : units V_optical    = mV   ' 5: "optical control [mV] / control variable"
public V_sensor     : units V_sensor     = V    ' 6: "voltage sensor supply [1/10V]"
public I_laser_pane : units I_laser_pane = mA   ' 7: "current page heating laser head [mA]"
public I_recvr_pane : units I_recvr_pane = mA   ' 8: "current page heating receiver head [mA]"
public T_ambient    : units T_ambient    = degC ' 9: "ambient temp [degC]"
public V_heating    : units V_heating    = V    ' 10: "voltage heating supply [1/10V]"
public I_housing    : units I_housing    = mA   ' 11: "current heating housing [mA]"
public I_heads      : units I_heads      = mA   ' 12: "current heating heads [mA]"
public I_carriers   : units I_carriers   = mA   ' 13: "current heating carriers [mA]"

dim time(9)
dim msg as string * 80

dataTable("Messages",1,100)
    sample(1,progSig,uint2)
    sample(1,msg,string)
endTable

sub logmsg(optional s as string * 80 = "MARK", _
    optional t as string * 40 = "", optional u as string * 40 = "", _
    optional v as string * 40 = "", optional w as string * 40 = "", _
    optional x as string * 40 = "", optional y as string * 40 = "")
    msg = s & " " & t & " " & u & " " & v & " " & w & " " & x & " " & y
    msg = trim(msg)
    calltable(Messages)
endsub 'logmsg

sub lpm_cmd(cmd as string, optional value as long = 99999)
    dim s as string
    '' send an extra CR to clear the output buffer:
    serialOut (LPM__COMMPORT,CR,"",0,0)
    if value = 99999 then
        sprintf(s, "%02u%s%c", LPM_ID, cmd, CR)
    else
        sprintf(s, "%02u%s%05u%c", LPM_ID, cmd, value, CR)
    endif
    '' s is "xxCCR" or "xxCCnnnnnR", where xx=ID, CC=cmd, n=0-padded arg, R=<CR>
    serialOut (LPM__COMMPORT,s,"",0,0)
endsub ' lpm_cmd

function get_lpm(cmd as string, optional value as long = 99999)
    dim s as string * 80
    lpm_cmd(cmd, value)
    serialin(s,LPM__COMMPORT,300,CR,2233)
    return s
endFunction ' get_lpm()

DataTable(LPM_state,1,-1)
  DataInterval(0,60,Sec,0)
  sample(1,progSig,uint2)
  sample(1,T_interior,fp2)
  sample(1,T_laserdrvr,fp2)
  sample(1,I_laser,fp2)
  sample(1,V_control,fp2)
  sample(1,V_optical,fp2)
  sample(1,V_sensor,fp2)
  sample(1,I_laser_pane,fp2)
  sample(1,I_recvr_pane,fp2)
  sample(1,T_ambient,fp2)
  sample(1,V_heating,fp2)
  sample(1,I_housing,fp2)
  sample(1,I_heads,fp2)
  sample(1,I_carriers,fp2)
  sample(1,LPM_errors,uint2)
  sample(1,LPM_warnings,uint2)
  sample(1,TM5_bytes,uint2)
  sample(1,TM5_retries,uint2)
  sample(1,TM5_timer,uint2)
EndTable

sub get_error_counts ' called if needed by get_LPM_errors() and get_LPM_warnings()
    '' LPM error and warning counts are from FM[1..6] and FM[7..15]
    lpm_cmd("FM")
    serialIn(FM_raw,LPM__COMMPORT,300,CR,80)
    SplitStr (LPM_err_count(),FM_raw,SEMICOLON,15,2)
    got_error_counts = True
endsub ' get_error_counts

sub get_LPM_errors ' called by get_LPM_state()
    dim i as long
    '' LPM error flags are from LPM[23..28] (also see DX[1..6])
    '' LPM error counts are from FX[1..6]
    for i = 1 to 6
        if LPM_errors AND &b01 << (i-1) = 0 AND LPM(22+i) = 1 then
            if NOT got_error_counts then get_error_counts()
            logmsg("ERROR:", LPM_error(i), "( count:", LPM_err_count(i), ")")
            LPM_errors = LPM_errors OR &b01 << (i-1) 
        endif
        if LPM_errors AND &b01 << (i-1) > 0 AND LPM(22+i) = 0 then
            logmsg("error off:", LPM_error(i))
            LPM_errors = LPM_errors OR NOT &b01 << (i-1) 
        endif
    next i
endsub ' get_LPM_errors

sub get_LPM_warnings ' called by get_LPM_state()
    dim i as long
    '' LPM warning flags are from LPM[29..37] (also see DX[7..15])
    '' LPM warning counts are from FX[7..15]
    for i = 1 to 8
        if LPM_warnings AND &b01 << (i-1) = 0 AND LPM(28+i) = 1 then
            if NOT got_error_counts then get_error_counts()
            logmsg("WARNING:", LPM_warning(i), "( count:", LPM_err_count(i+6), ")")
            LPM_warnings = LPM_warnings OR &b01 << (i-1) 
        endif
        if LPM_warnings AND &b01 << (i-1) > 0 AND LPM(28+i) = 0 then
            logmsg("warning off:", LPM_warning(i))
            LPM_warnings = LPM_warnings OR NOT &b01 << (i-1) 
        endif
    next i
endsub ' check_LPM_errors

sub get_LPM_state
    '' LPM analog diagnostic data from DD[1..13] or LPM[38..50]
    T_interior = LPM(37+1)
    T_laserdrvr = LPM(37+2)       ' "temp of laser driver 0-80 degC"
    I_laser     = LPM(37+3)/100   ' "mean value laser current [1/100 mA]"
    V_control   = LPM(37+4)       ' "control voltage [mV] ref value: 4010+/-5"
    V_optical   = LPM(37+5)       ' "optical control [mV] / control variable"
    V_sensor    = LPM(37+6)/10    ' "voltage sensor supply [1/10V]"
    I_laser_pane= LPM(37+7)       ' "current page heating laser head [mA]"
    I_recvr_pane= LPM(37+8)       ' "current page heating receiver head [mA]"
    T_ambient   = LPM(37+9)       ' "ambient temp [degC]"
    V_heating   = LPM(37+10)/10   ' "voltage heating supply [1/10V]"
    I_housing   = LPM(37+11)      ' "current heating housing [mA]"
    I_heads     = LPM(37+12)      ' "current heating heads [mA]"
    I_carriers  = LPM(37+13)      ' "current heating carriers [mA]"
    got_error_counts = False
    get_LPM_errors
    get_LPM_warnings
endsub ' get_LPM_state

DataTable(LPM,TM5_checksum,-1)
  dataInterval(0,60,Sec,10)
  sample(1,TM5_raw,String)
  sample(1,progSig,uint2)
EndTable
    
function check_TM5_raw as boolean
    dim i as long
    dim a as string * 1
    dim sum as long = 0
    if len(TM5_raw) <> 2233 then return False
    if ascii(TM5_raw(1,1,1)) <> 2 then return False
    if ascii(TM5_raw(1,1,2233)) <> 3 then return False
    do
        i += 1
        a = ascii(TM5_raw(1,1,i))
        if i = 2228 OR i = 2229 then
            '' convert checksum hex nibble "1" to 1, "A" to 10, etc.
            if a>=48 AND a<=57 then a=a-48 else if a>=65 AND a<=70 then a=a-55
            if i = 2228 then a = a * 16
        endif
        sum += a
    loop until i = 2233
    '' adding the checksum to the sum of bytes should result in 0x00 in last byte
    if sum << 24 <> 0 then return False
    return True
endFunction ' check_TM5_raw()

sub init_LPM_messages
    '' LPM error flags from LPM[22..28] or DX[1..6]
    LPM_error(1) = "static signal out of range"
    LPM_error(2) = "laser temp (analog) too high"
    LPM_error(3) = "laser temp (digital) too high"
    LPM_error(4) = "laser current (analog) too high"
    LPM_error(5) = "laser current (digital) too high"
    LPM_error(6) = "sensor supply out of range"

    '' LPM warning flags from LPM[29..37] or DX[7..15]
    LPM_warning(1) = "current: pane heating laser head"
    LPM_warning(2) = "current: pane heating receiver head"
    LPM_warning(3) = "temperature sensor"
    LPM_warning(4) = "heating supply out of allowed range"
    LPM_warning(5) = "current: heating housing"
    LPM_warning(6) = "current: heating heads"
    LPM_warning(7) = "current: heating carriers"
    LPM_warning(8) = "control output laser power high"
    LPM_warning(9) = "not used"
endSub ' init_LPM_messages

beginProg
    progSig = status.ProgSignature

    '' the MD485 is fixed at 9600, so the LPM should be as well
    serialOpen (LPM__COMMPORT,9600,0,300,4000)

    '' put instrument in config mode:
    lpm_cmd("KY",1)
    lpm_cmd("BR",5)                        '' 5:9600, 6:19200, 9:115200
    lpm_cmd("BD",1)                        '' 0:rs422, 1:rs485 (half duplex)
    logmsg("LPM set to 9600, half duplex")

    '' set the LPM clock from the logger at startup:
    realtime(time) '' 1:year, 2:month, 3:day, 4:hour, 5:minute, 6:second
    lpm_cmd("ZY", time(1) mod 100)
    lpm_cmd("ZN", time(2))
    lpm_cmd("ZD", time(3))
    lpm_cmd("ZH", time(4))
    lpm_cmd("ZM", time(5))
    lpm_cmd("ZS", time(6))
    logmsg("LPM","CLOCK SET:", get_lpm("ZT"), "runtime:", get_lpm("ZB"), "hrs")

    '' configure automatic data telegram 5 output:
    lpm_cmd("TM",5)

    '' configure digital outputs
  ' lpm_cmd("D1", 1)
  ' lpm_cmd("D2", 19)
    
    '' put instrument in normal command mode:
    lpm_cmd("KY", 0)

    init_LPM_messages

    Scan (60,sec,0,0)
        panelTemp (panelTemp,_60Hz)
        battery (battery)

        '' every minute, read data telegram 5 from the LPM, retry if necessary
        timer(1,sec,2)
        TM5_retries = 0
        serialIn(TM5_raw,LPM__COMMPORT,1500,ETX,2233)
        TM5_checksum = check_TM5_raw()
        do while TM5_checksum = False
            TM5_retries += 1
            lpm_cmd("TR",5)
            serialIn(TM5_raw,LPM__COMMPORT,300,ETX,2233)
            TM5_checksum = check_TM5_raw()
            if TM5_retries >= MAX_TM5_RETRIES then exitDo
            delay(0,1,sec)
        loop
        TM5_timer = timer(1,sec,1)
        TM5_bytes = len(TM5_raw)
        callTable LPM
  
        SplitStr (LPM(),TM5_raw,SEMICOLON,525,2)
          
        '' get operating state of the LPM as analog values, binary errors and warnings:
        get_LPM_state
        callTable LPM_state

        '' read LPM digital output channels -- COMMENTED-OUT FOR NOW
      ' periodAvg(x, LPM_DO1__P, 0, 0)
      ' periodAvg(x, LPM_DO2__P, 0, 0)

        if timeIntoInterval(0,1,day) then
            '' emit message with several parameters, then zero precip total:
            logmsg("LPM:" & get_lpm("ZT"), _
                get_lpm("ZB") & " hrs", _
                "errors:" + LPM_errors, _
                "warnings:" + LPM_warnings)
             '' LPM_precip_qty & " mm in " & get_lpm("PT") & " hrs")
            lpm_cmd("RA")
        endif

    NextScan
EndProg

'' CRBasic instruction prototypes:
''  
''  serialOpen(LPM__COMMPORT,9600,0,300,10000)
''  serialOpen(
''      ComPort     : Com1 (uses C1 and C2), ..., ComRS232 (uses DB9F) 
''      BaudRate    : 9600, 19200, 115200, etc.
''      Format      : 0=no parity, 1 stop bit, 8 data bits
''      TxDelay     : usec delay before outputting strings
''      BufferSize  : buffer size in bytes for ring memory used for the port
''  )
''
''  serialin(s,LPM__COMMPORT,300,chr(13),2233)
''  serialIn(
''      Dest            : string variable to contain results
''      ComPort         : COM1=(C1,C2), COM2=(C3,C4), ..., ComRS232=db9F, ...
''      TimeOut         : time in .01 seconds to complete call; 0=no time limit
''      TerminationChar : character that signals end of output
''                      : entered as a number from 0 to 255: it is not included in results
''                      : entered as a string value: it is included in result
''                      : entered as a number < 0 or null string: no termination char
''      MaxNumChars     : instruction will return when max chars have been received
''  )
''
''  serialOut(LPM__COMMPORT,s,"",0,0)
''  serialOut(
''      ComPort
''      OutString       : string to send
''      WaitString      : if "", look for echo of each character from instrument
''      NumTries        : if 0, send once, return number of bytes sent
''      Timeout         : if 0, don't check for WaitString
''  )
''
''  timer(
''      TimerNo : timer object identifier, number or variable
''      TUnits  : timer units: usec, msec, sec, min, hr
''      TOption : 0=start, 1=stop, 2=reset and start, 3=stop and reset, 5=read only
''  )
''
''  splitStr(diag(),DD_string,CHR(59),13,2)
''  splitStr(
''      SplitResult     : string array to contain results
''      SearchString    : string to split
''      FilterString    : delimiter to split on
''      NumSplit        : max number of strings to return
''      SplitOption     : 0: numeric
''                      : 1: non-numeric
''                      : 2: split SearchString on the entire FilterString
''                      : 3: split SearchString on any character in FilterString
''                      : 4: HeaderFilter: return string portion preceding FilterString
''                      : 5: FooterFilter: return string portion following FilterString
''                      : 6: HeaderFilterChars ...
''                      : 7: FooterFilterChars ...
''                      : 8: filters hexadecimal numbers?
''                      : 1x: x as above, return NAN or "" for empty elements
''  )
'' 
''  NOTE: The definitive documentation for CRBasic is the Windows Help file associated
''        with the CRBasic editor included as part of Campbell Scientific LoggerNet.  No
''        other online or offline documentation exists, to my knowledge.

